// Set deconvolution edges cropping
cropEdges = 1;	// 1/0 == Yes/No
cropsize = 16;

// Set parameters
gridsize = 16;
ThreshType = "Huang";	//"RenyiEntropy";
Gauss_sigma = 40;

// WindowDisplacement = 0 --> WindowDisplacement = gridsize, perfect non-overlapping grid
// WindowDisplacement > 0 --> Displacement value of for rolling window  (1 takes super long, 2 is fine)
// WindowDisplacement < 0 --> Absolute value gives the fraction of gridsize as rolling window value. E.g. -2 will give 1/2 gridsize (i.e. 50% overlap) and -4 will give 1/4 gridsize (i.e. 75% overlap)
WindowDisplacement = 8;
	

// Set channel order
DNAchannel = 1;
COROchannel = 2;
MTchannel = 3;
KTchannel = 4;



// Initialize macro for test environments
// can be commented out/deleted for final version, but doesn't interfere
start = getTime();
selectImage(1);
ori = getTitle();

run("Select None");
run("Brightness/Contrast...");

close("\\Others");
roiManager("reset");

Stack.getDimensions(width, height, channels, slices, frames);
run("Properties...", "channels=" + channels + " slices=" + slices + " frames=" + frames + " unit=pix pixel_width=1 pixel_height=1 voxel_depth=0");



// Crop off deconvolution edges


run("Duplicate...", "duplicate");
workingImage = getTitle();
if (cropEdges){
	makeRectangle(cropsize, cropsize, getWidth-cropsize*2, getHeight-cropsize*2);
	run("Crop");
}


// Call sequential functions
makeDNAMask(DNAchannel);
makeGrid(gridsize);
clusterList = MeasureClustering(KTchannel,MTchannel);


finish = getTime();
duration = round((finish-start)/1000);
//Array.print(ori,clusterList);
print(WindowDisplacement,duration,"sec",roiManager("count"));

//makeSlidingWindow();	// update from makeGrid


//waitForUser("All done");

function makeDNAMask(DNA){
	// prep images
	selectImage(workingImage);
	setSlice (DNA);
	run("Duplicate...", "duplicate channels=" + DNA);
	run("Grays");
	mask = getTitle();


/*	// de-blur
	run("Duplicate..."," ");
	getTitle() = blur;
	run("Gaussian Blur...", "sigma=" + Gauss_sigma);
	imageCalculator("Subtract", mask,blur);
	close(blur);
*/

	// make mask
	setAutoThreshold(ThreshType+" dark");
	run("Convert to Mask");
	run("Erode");
	for (i = 0; i < (gridsize); i++) 	run("Dilate");
//	for (i = 0; i < 24; i++) 	run("Dilate");

	// find main cell in mask
	run("Analyze Particles...", "display clear include add");
	
	while ( roiManager("count") > 1){
		roiManager("select", 0);
		getStatistics(area_0);
		roiManager("select", 1);
		getStatistics(area_1);
		if (area_0 < area_1)	roiManager("select", 0);
		roiManager("delete");
	}

	selectImage(workingImage);
	roiManager("select", 0);
	run("Crop");
	
	//roiManager("reset");
	close(mask);
}


function makeGrid(gridsize) {
	// make cell mask image
	selectImage(workingImage);
	newImage("newMask", "8-bit", getWidth, getHeight,1);
	mask = getTitle();
	roiManager("select", 0);
	run("Invert");

	// make grid around mask
	if (WindowDisplacement == 0)		WindowDisplacement = gridsize;
	else if (WindowDisplacement < 0){
		division = abs(WindowDisplacement);
		WindowDisplacement = (gridsize/division);
	}
	W_offset = (getWidth()  % WindowDisplacement) / 2;
	H_offset = (getHeight() % WindowDisplacement) / 2;
		
	
	for (x = W_offset; x < getWidth()-W_offset; x+=WindowDisplacement) {
		for (y = H_offset; y < getHeight()-H_offset; y+=WindowDisplacement) {
			makeRectangle(x, y, gridsize, gridsize);
			getStatistics(area, mean);
			if (mean == 0 && area == gridsize*gridsize)		roiManager("add");
		}
	}

	// clean up clutter
	close(mask);
	
	selectImage(workingImage);
	run("Select None");
	roiManager("select",0);
	roiManager("delete");
	roiManager("Remove Channel Info");
	roiManager("Show All without labels");

}

function MeasureClustering(KTch,MTch){
	// find kinetochores
	selectImage(workingImage);
	setSlice(KTch);
	run("Find Maxima...", "prominence=150 strict exclude output=[Single Points]");
	roiManager("Show All without labels");
	spots = getTitle();
	run("Divide...", "value=255");
	setMinAndMax(0, 1);

	CENs = newArray(roiManager("count"));
	for (roi = 0; roi < roiManager("count"); roi++) {
		roiManager("select",roi);
		CENs[roi] = getValue("IntDen");
	}
	run("Select None");
	
	return CENs;
}



